CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-Z][0-9]{2})
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Default Input Folder sub-folder|Dropbox (HMS)/Felix/Harvard/03_LSD/Microscopy/20230623_4KO-GRN_Filipin405_WF
    Match file and image metadata:[{'CSV Metadata': 'Well', 'Image Metadata': 'Well'}]
    Use case insensitive matching?:No
    Metadata file name:Metadata_channels_filipin.csv
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_MIP.tif")
    Name to assign these images:Filipin
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Gene
    Metadata category:Gene

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Filipin
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):250,1500
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:400
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    Thresholding method:Sauvola

MeasureImageIntensity:[module_num:6|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
    Select images to measure:Filipin
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cells
    Calculate custom percentiles:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Dropbox (HMS)/Felix/Harvard/03_LSD/Microscopy/20230301_4KO_p62-488_FTH1-568_HA-647
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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