CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "tifFilipin-")
    Name to assign these images:Filipin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tifLyso-")
    Name to assign these images:Lysosome
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tifDNA-")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tifFTH1-")
    Name to assign these images:FTH1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:FTH1_cytoslic
    Image or measurement?:Image
    Select the first image:FTH1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DNA
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Filipin
    Name the primary objects to be identified:Filipin
    Typical diameter of objects, in pixel units (Min,Max):3,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.8
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:FTH1_cytoslic
    Name the primary objects to be identified:FTH1
    Typical diameter of objects, in pixel units (Min,Max):1,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DNA
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):25,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Lysosome
    Name the primary objects to be identified:Lysosomes
    Typical diameter of objects, in pixel units (Min,Max):3,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

RelateObjects:[module_num:10|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
    Parent objects:Lysosomes
    Child objects:FTH1
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:FTH1_by_Lyso
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
RelateObjects:[module_num:11|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
    Parent objects:Lysosomes
    Child objects:Filipin
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Filiin_by_Lyso
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
MeasureColocalization:[module_num:12|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
    Select images to measure:FTH1, Filipin, Lysosome
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:FTH1, Lysosomes, Nucleus
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Dropbox (HMS)/Felix/Harvard/03_LSD/Microscopy/20231224_HeLa-Ctrl-4KO__Filipin405_FTH1-488_DNAspy555_HA647
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Image filename
    Select the image to use as the identifier:DNA
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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